PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = UniformityIllusion
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Routines
  Routine trial
  Routine Welcome
    TextComponent WelcomeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Welcome to our Study!
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  Routine Instructions
    TextComponent instructionsText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent nextScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Trials
    ImageComponent image
      image = stimuli\3a.png
      opacity [set every frame] = frameN/120
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Trials
  Routine Thanks_
  Routine Questionnaire
    FormComponent DepressionQuestionnaire
      Data Format = rows
      Item Padding = 0.05
      Items = .csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Questionnaire
  Routine Instructions
  LoopInitiator PracticeTrialsLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Practice_Trials
  LoopTerminator PracticeTrialsLoop
  LoopInitiator TestTrialsLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Test_Trials
  LoopTerminator TestTrialsLoop
  Routine Thanks_
