PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = UniformityIllusion
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Routines
  Routine trial
  Routine Welcome
    TextComponent WelcomeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Welcome to our Study!
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  Routine Instructions
    TextComponent instructionsText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This task involves an optical illusion in which the central visual field is different from the peripheral visual field. However, when one fixates on the center, the central visual field may be extended to the periphery and one will experience a uniform visual field.

        Each trial will begin with a central red cross displayed on a white background. Please fixate your gaze on this red cross. During each trial, please look continuously at the red cross in the center of the screen. Do not look away from the red cross at any point during each trial. You will be given the ability to indicate if you looked away from the red cross after each trial.

        Press the spacebar to continue.
    KeyboardComponent nextScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Trials
    CodeComponent code
      Code Type = Py
      Begin Routine:
        stimulusInterval = randint(low = 2, high = 4) # choose a value
        thisExp.addData('stimulusInterval', stimulusInterval) # record it in the data file
    ImageComponent hasPeriphery
      image [set every repeat] = $midImage
      opacity [set every frame] = frameN/(10 * stimulusInterval)
      startEstim = 2
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent noPeriphery
      image [set every repeat] = $startImage
      opacity [set every frame] = 1-frameN/(10 * stimulusInterval)
      startEstim = 0
      stopVal [duration (s)] = 10
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    ImageComponent final
      image [set every repeat] = $endImage
      opacity = (math.floor(frameN/7)) / 100
      startVal [frame N] = 10 * stimulusInterval
      stopVal [duration (s)] = 12
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    PolygonComponent blank_screen
      fillColor [set every repeat] = black
      lineColor [set every repeat] = $win.color
      shape = rectangle
      size = (2,2)
      startVal [frame N] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent text
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = +
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  Routine Test_Trials
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        stimulusInterval = randint(low = 1, high = 9) # choose a value
        thisExp.addData('stimulusInterval', stimulusInterval) # record it in the data file
    ImageComponent hasPeriphery_2
      image [set every repeat] = $midImage
      opacity [set every frame] = frameN/(10 * stimulusInterval)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent noPeriphery_2
      image [set every repeat] = $startImage
      opacity [set every frame] = 1-frameN/(10 * stimulusInterval)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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  Routine Thanks_
  Routine Questionnaire
    FormComponent DepressionQuestionnaire
      Data Format = rows
      Item Padding = 0.1
      Items = depression.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (3.5, 1)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.1
      text = Submit
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Flow
  Routine Welcome
  Routine Questionnaire
  Routine Instructions
  LoopInitiator PracticeTrialsLoop loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = picPaths.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'startImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\1start.png', 'midImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\1a.png', 'endImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\1a.png', 'AB': 'a'},
      {'startImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\1start.png', 'midImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\1a.png', 'endImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\1b.png', 'AB': 'b'},
      {'startImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\2start.png', 'midImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\2a.png', 'endImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\2a.png', 'AB': 'a'},
      {'startImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\2start.png', 'midImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\2a.png', 'endImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\Pics\\2b.png', 'AB': 'b'}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
    Routine Practice_Trials
  LoopTerminator PracticeTrialsLoop
  Routine Welcome
  LoopInitiator TestTrialsLoop loopType="TrialHandler"
    Selected rows = 6:30
    conditionsFile = picPaths.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'startImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\1start.png', 'endImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\1a.png', 'AB': 'a'},
      {'startImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\1start.png', 'endImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\1b.png', 'AB': 'b'},
      {'startImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\2start.png', 'endImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\2a.png', 'AB': 'a'},
      {'startImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\2start.png', 'endImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\2b.png', 'AB': 'b'},
      {'startImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\3start.png', 'endImage': 'C:\\Users\\hesselmann\\Desktop\\PsychoPyUniformityIllusion\\UniformityIllusionPsychoPy\\stimuli\\3a.png', 'AB': 'a'}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
    Routine Practice_Trials
  LoopTerminator TestTrialsLoop
  Routine Thanks_
