PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = imagestest
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Routines
  Routine trial
    ImageComponent imageTest
      image [set every repeat] = $ImageFile
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = '0:5'
    conditionsFile = ..\Mappe1.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'ImageFile': 'C:\\Users\\hesselmann\\Desktop\\stimuli\\1a.png', 'OldNew': 'old'},
      {'ImageFile': 'C:\\Users\\hesselmann\\Desktop\\stimuli\\1b.png', 'OldNew': 'old'},
      {'ImageFile': 'C:\\Users\\hesselmann\\Desktop\\stimuli\\2a.png', 'OldNew': 'old'},
      {'ImageFile': 'C:\\Users\\hesselmann\\Desktop\\stimuli\\2b.png', 'OldNew': 'new'},
      {'ImageFile': 'C:\\Users\\hesselmann\\Desktop\\stimuli\\3a.png', 'OldNew': 'new'},
      {'ImageFile': 'C:\\Users\\hesselmann\\Desktop\\stimuli\\3b.png', 'OldNew': 'new'}]
    Routine trial
  LoopTerminator trials
